devices:
    Camera:
        driver: 'PVCam'
        config:
            serial: 'PCICamera0'
            scopeDevice: 'Microscope'
            scaleFactor: (1.0, 1.0)  ## used for rectangular pixels
            exposeChannel: 'DAQ', '/Dev1/port0/line3'  ## Channel for recording expose signal
            triggerOutChannel: 'DAQ', '/Dev1/PFI5'  ## Channel the DAQ should trigger off of to sync with camera
            triggerInChannel: 'DAQ', '/Dev1/port0/line8'  ## Channel the DAQ should raise to trigger the camera
            allowedBinning: range(1,2,4,8,16,32) ## Need this to avoid activating disastrous bug in pvcam driver
            params:
                READOUT_PORT: 0
                SPDTAB_INDEX: 2  ## fastest option for Quantix57
                GAIN_INDEX: 3
                CLEAR_MODE: 'CLEAR_PRE_EXPOSURE'
users:    readConfigFile('users.cfg')