# -*- coding: utf-8 -*-
DAQ:
    driver: 'NiDAQ'
    config: None
Clamp1:
    driver: 'MultiClamp'
    config:
        host: 'localhost:34567'
        channelID: 'model:MC700A,sn:,com:3,dev:0,chan:1'
        commandChannel: 'DAQ', '/Dev1/ao0'
        scaledChannel: 'DAQ', '/Dev1/ai3'
        rawChannel: 'DAQ', '/Dev1/ai5'
        vcHolding: -50e-3
        icHolding: 0.0
        cmdScale: {'VC': 50, 'IC': 2.5e9}
        settings: readConfigFile('multiclamp.cfg')
Clamp2:
    driver: 'MultiClamp'
    config:
        host: 'localhost:34567'
        channelID: 'model:MC700A,sn:,com:3,dev:0,chan:2'
        commandChannel: 'DAQ', '/Dev1/ao2'
        scaledChannel: 'DAQ', '/Dev1/ai6'
        rawChannel: 'DAQ', '/Dev1/ai7'
        vcHolding: -50e-3
        icHolding: 0.0
        cmdScale: {'VC': 50, 'IC': 2.5e9}
        settings: readConfigFile('multiclamp.cfg')
#Objective:
    #driver: 'objective'
    #config:
        #port: 'DAQ', 'di1'
Camera:
    driver: 'PVCam'
    config:
        serial: 'PM1394Cam00'
        objective: 'Objective'
        exposeChannel: 'DAQ', '/Dev1/port0/line3'  ## Channel for recording expose signal
        triggerOutChannel: 'DAQ', '/Dev1/PFI5'  ## Channel the DAQ should trigger off of to sync with camera
        triggerInChannel: 'DAQ', '/Dev1/port0/line8'  ## Channel the DAQ should raise to trigger the camera
        allowedBinning: [1,2,4,8] ## Need this to avoid activating disastrous bug in pvcam driver
        params:
            READOUT_PORT: 0
            SPDTAB_INDEX: 0  ## fastest option for QuantEM
            GAIN_INDEX: 3
            CLEAR_MODE: 'CLEAR_PRE_SEQUENCE'  ## Overlap mode for QuantEM

CameraTrigger:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/port0/line8'
            type: 'do'

Stim0:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/ao1'
            type: 'ao'
            units: u'µA'
            ## Scale is 10V / 10mA = 1V/1000µA
            scale: 1e-3

LED-Blue:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/port0/line5'
            type: 'do'
            holding: 0
LED-Green:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/port0/line6'
            type: 'do'
            holding: 0

Laser-UV:
    driver: 'DAQGeneric'
    config:
        QSwitch:
            channel: 'DAQ', '/Dev1/port0/line7'
            type: 'do'
            holding: 0
        Shutter:
            channel: 'DAQ', '/Dev1/port0/line8'
            type: 'do'
            holding: 0

Puffer:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/port0/line9'
            type: 'do'
            holding: 0
    
Objective:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/port0/line1'
            type: 'di'

TestLoop1:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/port0/line2'
            type: 'do'
            holding: 0
        Loop:
            channel: 'DAQ', '/Dev1/ai22'
            type: 'ai'

TestLoop2:
    driver: 'DAQGeneric'
    config:
        Command:
            channel: 'DAQ', '/Dev1/ao3'
            type: 'ao'
            holding: 0
        AILoop:
            channel: 'DAQ', '/Dev1/ai16'
            type: 'ai'
        DILoop:
            channel: 'DAQ', '/Dev1/port0/line3'
            type: 'di'

FootSwitch:
    driver: 'Trigger'
    config:
        DAQ: '/Dev1/PFI5'
